<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Bravo_Option_B_BL.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aspirate Media' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aspirate Media' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Check complete sup aspiration' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Add trypsin' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Add trypsin' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Check trypsin volume' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Wait For add trypsin' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Incubation time' Value='180' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Quench with media' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Quench with media' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Cell plate' />
					<Parameter Name='Plate type' Value='WJG 96 Costar 3370 PS Clr Rnd Well Flat Btm' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Unload based on barcode' Value='0' />
						<Parameter Category='' Name='Barcode' Value='' />
						<Parameter Category='' Name='Barcode Side' Value='West' />
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Add trypsin' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Add trypsin' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Wait For add trypsin' >
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				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='media' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='trypsin reservoir' />
					<Parameter Name='Plate type' Value='WJG 12 Axygen Reservoir HP Trough Bottom' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aspirate Media' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aspirate Media' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Add trypsin' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Add trypsin' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Quench with media' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Quench with media' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Unload based on barcode' Value='0' />
						<Parameter Category='' Name='Barcode' Value='' />
						<Parameter Category='' Name='Barcode Side' Value='West' />
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Quench with media' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Quench with media' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='media' />
					<Parameter Name='Plate type' Value='WJG 12 Axygen Reservoir HP Trough Bottom' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aspirate Media' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='waste' />
					<Parameter Name='Plate type' Value='96 Deep Well PP Sqr Well V Btm' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Add trypsin' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='trypsin reservoir' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='30' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='4' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='15' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='South' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='Timed' />
						<Parameter Category='' Name='RPM' Value='1000' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='5' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Aspirate Media' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='150' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='4' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='waste' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='South' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='30' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Aspirate south' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='30' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Aspirate east' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='waste' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Quench with media' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='media' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='120' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='4' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='120' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='20' />
						<Parameter Category='Volume' Name='Blowout volume' Value='20' />
						<Parameter Category='Properties' Name='Liquid class' Value='WJG Fast' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='120' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='20' />
						<Parameter Category='Volume' Name='Blowout volume' Value='20' />
						<Parameter Category='Properties' Name='Liquid class' Value='WJG Fast' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Aspirate south' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Cell plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='120' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='20' />
						<Parameter Category='Volume' Name='Blowout volume' Value='20' />
						<Parameter Category='Properties' Name='Liquid class' Value='WJG Fast' />
						<Parameter Category='Properties' Name='Mix cycles' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Aspirate east' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>