Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\Bravo_Option_B_BL.dev
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task Bravo::Initialize axis
      Device Device_Name=Bravo - 1 Location_Name=1
      Axis: W
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 5
      Location: 4
      Temperature: 4
      Wait: 0
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Temperature: 4
      Wait: 0
      Timeout: 1
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    Task BuiltIn::User Message
      Estimated time: 18
      Title: Startup Check
      Body:
        Check:
        - pos1: empty liquid waste [96 well deep well plate]
        - pos5: bead plate with 122uL beads in first column [96 well round bottom plate]
        - pos6: 20mL wash buffer [1 well reservoir]
        - minihub stack 1 slot 1 (bottom): 100-180uL sample plate [96 well flat bottom plate]
        - minihub stack 1 slot 2: 10mL lysis buffer [1 well reservoir]
        - benchcel stack 2: 4 new tip boxes
        - thermocube: manually set to 4C
        - check the 10m ConA binding incubation time
        - ALL LIDS OFF!
      Pause process: 1
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Main_Processes
  Process
    Plate name: sample plate
    Plate type: 96 Costar 3370 PS Clr Rnd Well Flat Btm
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: lysis reservoir
    Task Bravo::SubProcess
      Sub-process name: add samples to ConA beads
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Wait For
      Waitfor: Wait For tips1 to pos 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Signal
      Waitfor: Wait For sample plate removal
  Process
    Plate name: bead plate
    Plate type: 96 Costar 3788 PS Clr Rnd Well Round Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: dispense activated ConA beads
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task Bravo::SubProcess
      Sub-process name: add samples to ConA beads
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Incubation time: 600
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: remove PBS supe
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: add lysis
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=9
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: add wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 60
      Use relative timing: 0
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    Task BuiltIn::User Message
      Estimated time: 39
      Title: Load transposition mix
      Body: Put a 96 well PCR plate of 55uL fresh transposition mix in minihub stack 1 slot 3 (count from bottom)
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: transposition mix plate
    Task Bravo::SubProcess
      Sub-process name: remove lysis wash supe
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: add transposition mix
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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  Process
    Plate name: lysis reservoir
    Plate type: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::Spawn Process
      Process to spawn: tips1
    Task Bravo::SubProcess
      Sub-process name: add lysis
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
  Process
    Plate name: wash reservoir
    Plate type: 12 Axygen Reservoir HP Trough Bottom
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: add wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
  Process
    Plate name: liquid waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: remove PBS supe
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task Bravo::SubProcess
      Sub-process name: remove lysis wash supe
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
  Process
    Plate name: tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: dispense activated ConA beads
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task Bravo::SubProcess
      Sub-process name: add samples to ConA beads
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Signal
      Waitfor: Wait For tips1 to pos 2
    Task BuiltIn::Wait For
      Waitfor: Wait For sample plate removal
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: remove PBS supe
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tips2
  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: add lysis
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tips3
  Process
    Plate name: tips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: add transposition mix
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: transposition mix plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: add transposition mix
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: add wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task Bravo::SubProcess
      Sub-process name: remove lysis wash supe
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 6: 12 Axygen Reservoir HP Trough Bottom
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tips4
  Pipette_Process Name=add lysis
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tips2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      Location, plate: lysis reservoir
      Volume: 20
      Pre-aspirate volume: 20
      Blowout volume: 20
      Mix cycles: 2
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: lysis reservoir
      Volume: 50
      Pre-aspirate volume: 4
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: bead plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake (Shake (Bravo))
      Estimated time: 6
      Location, plate: bead plate
      Location, location: 5
      Mode: Timed
      RPM: 1300
      Direction: NWSE
      Time for operation in Timed mode: 5
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      Location, plate: bead plate
      Volume: 30
      Pre-aspirate volume: 30
      Blowout volume: 30
      Liquid class: Bead Mixing Silane
      Mix cycles: 3
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=add samples to ConA beads
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 14
      Location, plate: sample plate
      Volume: 50
      Pre-aspirate volume: 20
      Blowout volume: 20
      Mix cycles: 3
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: sample plate
      Volume: 140
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: sample plate
      Volume: 20
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate west
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: sample plate
      Volume: 10
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate east
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: sample plate
      Volume: 10
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
      Pipette technique: Aspirate north
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: bead plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 17
      Location, plate: bead plate
      Volume: 50
      Pre-aspirate volume: 50
      Blowout volume: 50
      Liquid class: Bead Mixing Silane
      Mix cycles: 5
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 7
      Location, plate: bead plate
      Mode: Timed
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 5
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: tips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=add transposition mix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Estimated time: 14
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tips4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: transposition mix plate
      Volume: 50
      Pre-aspirate volume: 4
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: bead plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 11
      Location, plate: bead plate
      Location, location: 5
      Mode: Timed
      RPM: 1300
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 15
      Location, plate: bead plate
      Volume: 30
      Pre-aspirate volume: 30
      Blowout volume: 30
      Liquid class: Bead Mixing Silane
      Mix cycles: 6
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 15
      Location, plate: bead plate
      Volume: 50
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 11
      Location, plate: transposition mix plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 5
      Title: last step manual
      Body:
        Now manually mix the bead plate and transfer into the transposition plate

        The robot is not great at mixing beads at this step, make sure to manually recover all beads.
      Pause process: 1
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tips4
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=add wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tips3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      Location, plate: wash reservoir
      Volume: 50
      Pre-aspirate volume: 50
      Blowout volume: 50
      Mix cycles: 2
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: wash reservoir
      Volume: 150
      Pre-aspirate volume: 4
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: bead plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      Location, plate: bead plate
      Volume: 50
      Pre-aspirate volume: 50
      Blowout volume: 50
      Liquid class: Bead Mixing Silane
      Mix cycles: 3
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: bead plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tips3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=dispense activated ConA beads
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tips1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Define Variables
      arrVariables col=1
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Shake
      Task_Disabled: 1
      Estimated time: 11
      Location, plate: bead plate
      Location, location: 5
      Mode: Timed
      RPM: 1300
      Direction: NS
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      Location, plate: bead plate
      Volume: 60
      Pre-aspirate volume: 10
      Blowout volume: 10
      Liquid class: Bead Mixing Silane
      Mix cycles: 3
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: bead plate
      Volume: 60
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 6
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strVariableName=col
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Wellselection=[[1,col],[2,col],[3,col],[4,col],[5,col],[6,col],[7,col],[8,col]]
      Location, plate: bead plate
      Volume: 10
      Distance from well bottom: 1
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: tips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=remove PBS supe
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tips1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 19
      Location, plate: bead plate
      Volume: 100
      Liquid class: Slow aspirate 100-200 ul
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: liquid waste
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=remove lysis wash supe
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 10
      Location, plate: tips3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 18
      Location, plate: bead plate
      Volume: 100
      Pre-aspirate volume: 4
      Liquid class: Slow aspirate 100-200 ul
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: liquid waste
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 5
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: tips3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
