Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\Bravo_Option_B_BL.dev
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task Bravo::Initialize axis
      Device Device_Name=Bravo - 1 Location_Name=1
      Axis: W
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 10
      Location: 4
      Temperature: 25
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Temperature: 25
      Timeout: 1
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    Task BuiltIn::User Message
      Estimated time: 13
      Title: Initial Setup
      Body:
        - Wash 1mL of SILANE magnetic beads twice with 1mL RLT and resuspend in 1mL of RLT after wash
        - Place 120ul of washed SILANE beads into A1-H1 of a 1ml deep well plate and place it on deck position 5
        - Dispense 32ml of buffer RLT into a single-well reservoir and place on deck position 4.
        - Place the transposed samples in a skirted 96-well PCR plate on deck position 9.
        - Place a 2ml deep well on deck position 1 for liquid waste.
        - Ensure there's at least 8 tipboxes in stack 2 of BenchCel without lids.
        - Disable light curtain because you will need to reach in to change plates during the run.
      Pause process: 1
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Main_Processes
  Process
    Plate name: liquid_waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
    Use single instance of plate: 1
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: remove binding buffer
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: remove 1st 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: remove 2nd 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
  Process
    Plate name: reagent_reservoir
    Plate type: 96 Axygen Reservoir Pyr btm single well
    Use single instance of plate: 1
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: add RLT to samples in ConA
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: add 100% IPA
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: 1st 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: 2nd 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: add elution buffer
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
  Process
    Plate name: cleanup
    Plate type: WJG 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: aliquot silane
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: add lysed supe to silane
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: add 100% IPA
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Incubation time: 120
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: remove binding buffer
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: 1st 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: remove 1st 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: 2nd 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: remove 2nd 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: add elution buffer
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: collect eluate
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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  Process
    Plate name: tipbox 1
    Plate type: 96 V11 LT250 Tip Box 19477.002
    Use single instance of plate: 1
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: aliquot silane
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tipbox 2
  Process
    Plate name: tipbox 2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: add RLT to samples in ConA
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tipbox 3
  Process
    Plate name: tipbox 3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: add lysed supe to silane
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tipbox 4
  Process
    Plate name: tipbox 4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: add 100% IPA
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: remove binding buffer
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tipbox 5
  Process
    Plate name: tipbox 6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: 2nd 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: remove 2nd 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tipbox 7
  Process
    Plate name: tipbox 7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: add elution buffer
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tipbox 8
  Process
    Plate name: tipbox 8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: collect eluate
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: sample
    Plate type: WJG 96 Eppendorf Twin.tec PCR
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: add RLT to samples in ConA
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: add lysed supe to silane
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: collect eluate
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Process
    Plate name: tipbox 5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: 1st 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task Bravo::SubProcess
      Sub-process name: remove 1st 70% IPA wash
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 4: 96 Axygen Reservoir Pyr btm single well
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: tipbox 6
  Pipette_Process Name=1st 70% IPA wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 7
      Title: 70% IPA
      Body:
        - Remove the 100% IPA plate from deck position 4.
        - Put a 1-well reservoir with 80 ml 70% IPA at deck position 4.
      Pause process: 1
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: reagent_reservoir
      Volume: 150
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: cleanup
      Volume: 150
      Liquid class: 96 disposable tip 11 ul- 50ul
      Distance from well bottom: 25
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 17
      Location, plate: cleanup
      Volume: 150
      Pre-aspirate volume: 20
      Blowout volume: 20
      Liquid class: Bead Mixing Silane
      Mix cycles: 4
      Aspirate distance: 3
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      Location, plate: cleanup
      Volume: 150
      Pre-aspirate volume: 20
      Blowout volume: 20
      Liquid class: 96 disposable tip 11 ul- 50ul
      Mix cycles: 1
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: tipbox 5
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=2nd 70% IPA wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 6
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Task_Disabled: 1
      Estimated time: 4
      Title: 70% IPA
      Body: Put a 1-well reservoir with 40 ml 70% IPA at deck position 4.
      Pause process: 1
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: reagent_reservoir
      Volume: 150
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: cleanup
      Empty tips: 1
      Volume: 150
      Liquid class: 96 disposable tip 11 ul- 50ul
      Distance from well bottom: 25
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 17
      Location, plate: cleanup
      Volume: 150
      Pre-aspirate volume: 20
      Blowout volume: 20
      Liquid class: Bead Mixing Silane
      Mix cycles: 4
      Aspirate distance: 3
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      Location, plate: cleanup
      Volume: 150
      Pre-aspirate volume: 20
      Blowout volume: 20
      Liquid class: 96 disposable tip 11 ul- 50ul
      Mix cycles: 1
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: tipbox 6
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=add 100% IPA
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 4
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 10
      Title: sample binding
      Body:
        - Remove the empty sample plate from deck position 9.
        - Replace the buffer RLT reservoir at deck position 4 with a 1-well reservoir with 32 ml of 100% IPA.
      Pause process: 1
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: reagent_reservoir
      Volume: 112.5
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: cleanup
      Empty tips: 1
      Volume: 112.5
      Blowout volume: 30
      Liquid class: 96 disposable tip 11 ul- 50ul
      Distance from well bottom: 25
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 7
      Location, plate: cleanup
      Location, location: 5
      Mode: Timed
      RPM: 1300
      Direction: NWSE
      Time for operation in Timed mode: 5
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 18
      Location, plate: cleanup
      Volume: 160
      Pre-aspirate volume: 20
      Blowout volume: 20
      Liquid class: Bead Mixing Silane
      Mix cycles: 4
      Aspirate distance: 4
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      Location, plate: cleanup
      Volume: 160
      Pre-aspirate volume: 20
      Blowout volume: 20
      Liquid class: 96 disposable tip 11 ul- 50ul
      Mix cycles: 1
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: tipbox 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=add RLT to samples in ConA
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: reagent_reservoir
      Volume: 165
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: sample
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 19
      Location, plate: sample
      Volume: 100
      Pre-aspirate volume: 30
      Blowout volume: 30
      Liquid class: Bead Mixing Silane
      Mix cycles: 5
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 22
      Location, plate: sample
      Volume: 100
      Pre-aspirate volume: 30
      Blowout volume: 30
      Liquid class: 96 disposable tip 11 ul- 50ul
      Mix cycles: 1
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: tipbox 2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=add elution buffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 7
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 46
      Title: elution
      Body:
        - Remove the 70% IPA plate
        - Place a 1-well reservoir with 25ml of ultrapure H2O at deck position 4.
        - Place a new empty 96-well twintec skirted PCR plate at deck position 9 to collect eluates.
      Pause process: 1
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: reagent_reservoir
      Volume: 20
      Liquid class: Slow aspirate
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: cleanup
      Empty tips: 1
      Volume: 20
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 15
      Location, plate: cleanup
      Volume: 10
      Pre-aspirate volume: 10
      Blowout volume: 10
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: tipbox 7
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=add lysed supe to silane
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Has_Breakpoint: 1
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 10
      Title: manual intervention
      Body: might need to hold the pcr plate at position 7 up a little to help with complete aspiration
      Pause process: 1
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: sample
      Volume: 107.5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: cleanup
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: sample
      Volume: 107.5
      Liquid class: Slow aspirate 100-200 ul
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: cleanup
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: tipbox 3
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=aliquot silane
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 12
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Define Variables
      arrVariables col=1
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    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Shake
      Estimated time: 11
      Location, plate: cleanup
      Location, location: 5
      Mode: Timed
      RPM: 1300
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      Location, plate: cleanup
      Volume: 50
      Pre-aspirate volume: 20
      Blowout volume: 20
      Liquid class: Bead Mixing Silane
      Mix cycles: 2
      Aspirate distance: 4
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: cleanup
      Volume: 60
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 6
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strVariableName=col
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Wellselection=[[1,col],[2,col],[3,col],[4,col],[5,col],[6,col],[7,col],[8,col]]
      Location, plate: cleanup
      Volume: 10
      Distance from well bottom: 3
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: tipbox 1
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=collect eluate
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tipbox 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 19
      Location, plate: cleanup
      Location, location: 7
      Volume: 20
      Liquid class: Slow aspirate
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 23
      Location, plate: sample
      Empty tips: 1
      Volume: 10
      Liquid class: Slow blowout
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: tipbox 8
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=remove 1st 70% IPA wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 10
      Location, plate: tipbox 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 24
      Location, plate: cleanup
      Location, location: 7
      Volume: 150
      Liquid class: Slow aspirate 100-200 ul
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: liquid_waste
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 35
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: cleanup
      Location, location: 7
      Volume: 20
      Liquid class: Slow aspirate
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: liquid_waste
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 35
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tipbox 5
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=remove 2nd 70% IPA wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 10
      Location, plate: tipbox 6
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 24
      Location, plate: cleanup
      Location, location: 7
      Volume: 150
      Liquid class: Slow aspirate 100-200 ul
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: liquid_waste
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 35
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch horizontal offset: -0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: cleanup
      Location, location: 7
      Volume: 20
      Liquid class: Slow aspirate
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: liquid_waste
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 35
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch horizontal offset: -0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tipbox 6
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=remove binding buffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: tipbox 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
        Wells: Column=0 Row=0
      PipetteHead: 96LT, 200 µL Series III
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    Task BuiltIn::Loop
      Number of times to loop: 3
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 24
      Location, plate: cleanup
      Location, location: 7
      Volume: 150
      Liquid class: Slow aspirate 100-200 ul
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: liquid_waste
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 35
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch horizontal offset: -0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tipbox 4
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
